<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:p1="clr-namespace:Bonsai.uEye;assembly=Bonsai.uEye"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>stimuli</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\resources\house.jpg</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-1</Left>
              <Right>1</Right>
              <Bottom>-1</Bottom>
              <Top>1</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:FileCapture">
                  <cv:FileName>data\Cam1.avi</cv:FileName>
                  <cv:PlaybackRate>85</cv:PlaybackRate>
                  <cv:StartPosition>0</cv:StartPosition>
                  <cv:PositionUnits>Frames</cv:PositionUnits>
                  <cv:Loop>false</cv:Loop>
                  <cv:Playing>true</cv:Playing>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:PublishSubject">
                <Name>Camera</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BackgroundSubtraction">
                <cv:BackgroundFrames>100</cv:BackgroundFrames>
                <cv:AdaptationRate>0</cv:AdaptationRate>
                <cv:ThresholdValue>50</cv:ThresholdValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
                <cv:SubtractionMethod>Dark</cv:SubtractionMethod>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>10</cv:MinArea>
                <cv:MaxArea>100</cv:MaxArea>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Centroid.X</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Double.IsNaN(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>NormalizeTracking</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Centroid</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>X</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FrameSize</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Width</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Max" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>0</dsp:Min>
                      <dsp:Max>416</dsp:Max>
                      <dsp:RangeMin>-1</dsp:RangeMin>
                      <dsp:RangeMax>1</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Y</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FrameSize</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Height</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Max" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>0</dsp:Min>
                      <dsp:Max>416</dsp:Max>
                      <dsp:RangeMin>-1</dsp:RangeMin>
                      <dsp:RangeMax>1</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="Item1" />
                      <Property Name="Y" Selector="Item2" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:CreatePoint2f">
                      <cv:X>0.1938131</cv:X>
                      <cv:Y>0.243104056</cv:Y>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="6" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="12" Label="Source2" />
                  <Edge From="7" To="11" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionExtremes">
                <cv:Method>Horizontal</cv:Method>
              </Combinator>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>FixOrientation</ipy:Name>
              <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from System import Tuple, Math, Single
from OpenCV.Net import Point2f

head = None
tail = None

def distancesquare(pt1,pt2):
  dx = (pt2.X - pt1.X)
  dy = (pt2.Y - pt1.Y)
  return dx * dx + dy * dy

def angleline(pt1,pt2):
  dx = (pt2.X - pt1.X)
  dy = (pt2.Y - pt1.Y)
  return Math.Atan2(dy, dx)

@returns(Single)
def process(value):
  global head, tail
  pt1 = value.Item1
  pt2 = value.Item2
  if pt1.X == Single(float.NaN):
    head = None
    tail = None
    return float.NaN
  else:
    if head is None or distancesquare(pt1, head) &lt; distancesquare(pt1, tail):
      head = pt1
      tail = pt2
    else:
      head = pt2
      tail = pt1
    return angleline(head,tail)</ipy:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>NormalizedTracking</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Size</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>FrameSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:uEyeCapture">
                <p1:DeviceId>1</p1:DeviceId>
                <p1:ConfigFile>C:\Users\ALBINO\Desktop\LowResCamParams.ini</p1:ConfigFile>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Camera</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Stimuli</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>Draw</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>NormalizedTracking</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:WithLatestFrom" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="LocationX" Selector="X" />
                  <Property Name="LocationY" Selector="Y" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:FunctionGenerator">
                  <dsp:BufferLength>1</dsp:BufferLength>
                  <dsp:Frequency>1</dsp:Frequency>
                  <dsp:Waveform>Sine</dsp:Waveform>
                  <dsp:SampleRate>20</dsp:SampleRate>
                  <dsp:Amplitude>0.5</dsp:Amplitude>
                  <dsp:Offset>1</dsp:Offset>
                  <dsp:Phase>0</dsp:Phase>
                </Combinator>
              </Expression>
              <Expression xsi:type="Index">
                <Operand xsi:type="IntProperty">
                  <Value>0</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Val0</Selector>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Diameter" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                <LocationX>-0.362179458</LocationX>
                <LocationY>0.526412666</LocationY>
                <Layer>0</Layer>
                <Diameter>0.7061074</Diameter>
                <ColorR>0.5</ColorR>
                <ColorG>1</ColorG>
                <ColorB>0.5</ColorB>
                <ColorA>0.2</ColorA>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="2" Label="Source1" />
              <Edge From="1" To="2" Label="Source2" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="2" To="4" Label="Source1" />
              <Edge From="3" To="11" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="11" Label="Source2" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source1" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="11" Label="Source3" />
              <Edge From="11" To="12" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Stimuli_WithTexture</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>Draw</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>NormalizedTracking</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:WithLatestFrom" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="LocationX" Selector="X" />
                  <Property Name="LocationY" Selector="Y" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Angle" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
                <Angle>57.2647743</Angle>
                <TextureName>stimuli</TextureName>
                <ExtentX>1</ExtentX>
                <ExtentY>1</ExtentY>
                <LocationX>-0.161100686</LocationX>
                <LocationY>0.373280168</LocationY>
                <Layer>0</Layer>
                <ScaleX>1</ScaleX>
                <ScaleY>1</ScaleY>
                <ShiftX>0</ShiftX>
                <ShiftY>0</ShiftY>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="2" Label="Source1" />
              <Edge From="1" To="2" Label="Source2" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="2" To="4" Label="Source1" />
              <Edge From="3" To="9" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="4" To="7" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="9" Label="Source2" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source3" />
              <Edge From="9" To="10" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Logging</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" DisplayName="RootPath" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>c:\</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:AsyncSubject">
                <Name>RootPath</Name>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" DisplayName="SessionId" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>session1</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>RootPath</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="Format">
                <Format>{0}{1}</Format>
                <Selector>Item1,Item2</Selector>
              </Expression>
              <Expression xsi:type="rx:AsyncSubject">
                <Name>SessionPath</Name>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="7" Label="Source2" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>